PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001', 'training': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1680, 1050]
  color = $[1,1,1]
  expName = SST
  keyboardBackend = ioHub
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Routines
  Routine TEST
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $ssd *1000
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  Routine FEEDBACK
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Experiment:
        correct_msg = 'Correct'
        incorrect_msg = 'Oops'
        too_slow_msg = 'To slow'
        too_fast_msg = 'To fast'
        correct_stop_msg = 'Perferfect stop'
        incorrect_stop_msg = 'You must Stop !'
        msg = ""
      Begin Routine:
        if signal == 0:
            if key_resp.keys is not None:
                if key_resp.rt <= StopSignal_start - 0.05 :
                    msg = too_fast_msg
                elif key_resp.corr == 1:
                    msg = correct_msg
                elif key_resp.corr == 0:
                    msg = incorrect_msg
                elif key_resp.rt >= (StopSignal_start - 0.05 + ssd):
                    msg = too_slow_msg
            else:
                msg = too_slow_msg
        elif signal == 1:
            if key_resp.keys is not None:
                msg = incorrect_stop_msg
            else:
                msg = correct_stop_msg
    TextComponent feedback_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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  Routine TRIAL_SST
    CodeComponent ssd_code
      Code Type = Auto->JS
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      Begin Experiment:
        event. Mouse(visible=False)

        # timing in which interval between Go and stop begin
        StopSignal_start = 0.95

        # ssd set to 150 and min 50 max 650
        ssd_1 = 0.150
        ssd_2 = 0.15
        ssd = 0.15
      Begin Routine:
        thisExp.addData("SSD", ssd*1000)
      End Routine:
        # code and log premature responses
        if key_resp.rt:
            if signal == 1:
                if key_resp.rt <= (StopSignal_start + ssd):
                    thisExp.addData("premature", 1)
                else:
                    thisExp.addData("premature", 0)
            elif signal == 0:
                if key_resp.rt <= (StopSignal_start):
                    thisExp.addData("premature", 1)
                else:
                    thisExp.addData("premature", 0)

        # RT from the end of Go signal to response
        if key_resp.rt:
            rt = (key_resp.rt - StopSignal_start ) * 1000 #sec to ms
            thisExp.addData("RT", rt)

        # dynamic SSD
        if signal == 1:
            if len(key_resp.keys) > 0:
                ssd = ssd - 0.050
                if ssd <= 0.050:
                    ssd = 0.050
            else:
                ssd = ssd + 0.050
                if ssd >= 0.650:
                    ssd = 0.650
    ImageComponent dot_img
      image = images/fix.png
      size = (2,2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      units = norm
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    ImageComponent go_img
      image [set every repeat] = $"images/" + go_file
      size = (2,2)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
      units = norm
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    ImageComponent stop_img
      image [set every repeat] = $"images/"  + stop_file
      size = (2,2)
      startVal [time (s)] = $start_stop + ssd
      stopVal [duration (s)] = 0.07
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      store = first key
      storeCorrect = True
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    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
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  Routine BREAK
    CodeComponent break_code
      Code Type = Auto->JS
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      Begin Routine:
        if Loop_blocchi.thisRepN == (nb_loop_blocks  -1):
            Loop_blocchi.finished = True
            continueRoutine = False
    TextComponent break_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pause.

        Press 'space' to continue.
    KeyboardComponent break_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine BEGIN_EXP
    TextComponent begin_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Training is finished.

        You will begin the expreriment. From now, you will not receive any feedback.

        Press 'space' to begin
    KeyboardComponent begin_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine INFO
    CodeComponent MIT_licence
      Code Type = Auto->JS
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      Before Experiment:
        # MIT License
        #
        # Copyright (c) [2014] [Thomas Quettier]
        #
        # Permission is hereby granted, free of charge, to any person obtaining a copy
        # of this software and associated documentation files (the "Software"), to deal
        # in the Software without restriction, including without limitation the rights
        # to use, copy, modify, merge, publish, distribute, sublicense, and/or sell
        # copies of the Software, and to permit persons to whom the Software is
        # furnished to do so, subject to the following conditions:
        #
        #   The above copyright notice and this permission notice shall be included in all
        # copies or substantial portions of the Software.
        #
        # THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND, EXPRESS OR
        # IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES OF MERCHANTABILITY,
        # FITNESS FOR A PARTICULAR PURPOSE AND NONINFRINGEMENT. IN NO EVENT SHALL THE
        # AUTHORS OR COPYRIGHT HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER
        # LIABILITY, WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING FROM,
        # OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR OTHER DEALINGS IN THE
        # SOFTWARE.
        #
        # Additional Note:
        #   While not legally binding, the author would appreciate an acknowledgment or citation
        # where possible if this software is used in the development of new software, publications,
        # or research. For citation guidelines, please refer to the CITATION file in this repository.
    CodeComponent setting_code
      Code Type = Auto->JS
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      Begin Experiment:
        nb_loop_blocks = 4
        #trials in bloch
        nb_loop_trial = 16 # 16 x 8= 128 (32 stop; 96 GO)

        iti = 1.6
        nb_training = expInfo['training']
    TextComponent info_txt
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your task will be to respond to the green arrow that will appear on the screen.

        In some trials, immediately after the arrow, the letters "XX" will appear. In this case, your task will be NOT to press the key, thus stopping your response.

        Sometimes it will be very easy to stop, other times more difficult, because the test adapts to your performance.

        Attention! We ask you not to wait for the appearance of the stimulus, but to respond as quickly and accurately as possible. Don't worry about making mistakes, the test will adapt.

        Press 'space' to continue
    KeyboardComponent info_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ISTRUCTIONS
    TextComponent istr_txt
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        It is still very important that you respond as QUICKLY and ACCURATELY as possible.

        The experiment lasts about 20 minutes.
        The experiment consists of a practice block and 4 experimental blocks. During the practice block, you will receive feedback on your performance ("too slow", "correct stop").

        Between each block, there will be an opportunity for a short break.

        Press 'space' to begin
    KeyboardComponent istr_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine THANKS
    TextComponent thanks_txt
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for your time.
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    KeyboardComponent thanks_kb
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    TextComponent iti_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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Flow
  Routine INFO
  Routine ISTRUCTIONS
  LoopInitiator Loop_practice loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = nb_training
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    conditions:
      [{'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
      {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
      {'go_file': 'go_left.png', 'stop_file': 'stop.jpg', 'correct_key': 'left', 'signal': 1},
      {'go_file': 'go_right.png', 'stop_file': 'stop.jpg', 'correct_key': 'right', 'signal': 1}]
    Routine TRIAL_SST
    Routine FEEDBACK
    Routine ITI
  LoopTerminator Loop_practice
  Routine BEGIN_EXP
  LoopInitiator Loop_blocchi loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = nb_loop_blocks
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    LoopInitiator loop_trials loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = fullRandom
      nReps = nb_loop_trial
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      conditions:
        [{'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
        {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
        {'go_file': 'go_left.png', 'stop_file': 'bianco.png', 'correct_key': 'left', 'signal': 0},
        {'go_file': 'go_right.png', 'stop_file': 'bianco.png', 'correct_key': 'right', 'signal': 0},
        {'go_file': 'go_left.png', 'stop_file': 'stop.jpg', 'correct_key': 'left', 'signal': 1},
        {'go_file': 'go_right.png', 'stop_file': 'stop.jpg', 'correct_key': 'right', 'signal': 1}]
      Routine TRIAL_SST
      Routine ITI
    LoopTerminator loop_trials
    Routine BREAK
  LoopTerminator Loop_blocchi
  Routine THANKS
